PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = myMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = ESST
  keyboardBackend = ioHub
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Routines
  Routine loadStims
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    CodeComponent codeLoadStims
      Code Type = Auto->JS
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      Begin Experiment:
        # Prepare a dictionary to hold all our stims, categorized by stim_type
        all_stims = {'ambiguous_image': [], 'negative_image': [], 'positive_image': []}

        # Code Component - Begin Experiment
        stimuli_list = data.importConditions('image_stims.xlsx')

        # You can iterate over the stimuli_list to categorize them into the dictionary if needed
        for stim in stimuli_list:
            all_stims[stim['stim_type']].append(stim['stim_file'])

        # Initialize counter for each stim_type at 0
        next_stim = {}
        for stim_type in all_stims.keys():
            next_stim[stim_type] = 0
  Routine shuffleStims
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    CodeComponent codeShuffleStims
      Code Type = Auto->JS
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      Begin Routine:
        from random import shuffle
        # Shuffle the list of stims for each stim type directly
        for key in all_stims:
            shuffle(all_stims[key])
        #create a new_stim dict
        next_stim = {}
        next_stim[key+"_"] = 0
  Routine prepTimings
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    CodeComponent codePrepTimings
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
        globalClock = core.Clock()  # to track the time since experiment started
      Begin Routine:
        #set to 'true' for debugging
        debug_mode = False

        #set the buzz timer params
        buzz_min = 0.25
        buzz_max = 1.45
        buzz_default = 0.5

        #create a dictionary to hold all of our stop-signal delay (SSD) values
        buzz_timers = {}

        go_accuracies = []
        go_reaction_times = []
        stop_accuracies = []
        stop_reaction_times = []

        #get a list of all the stim types
        key_list = list(all_stims)

        #for each stim category...
        for key in key_list:
            buzz_timers[key] = buzz_default
  Routine instructions
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    TextComponent textInstructions
      letterHeight = 0.025
      pos = (-0.00, -0.00)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        This is a timed test.

        On each trial, you will see an image.

        Your task is to decide whether each image is POSITIVE or NEGATIVE:

        - Press the 'A' key (marked with a smiling sticker) if the image is pleasant or POSITIVE.

        - Press the 'L' key (marked with a frowning sticker) if the image is unpleasant or NEGATIVE.

        If you are unsure how a picture makes you feel, follow your instinct or 'gut reaction'.

        Please respond as quickly and accurately as possible!

        However, if you hear a sound (called the 'STOP SIGNAL'), you should STOP your response on that trial. DO NOT respond to the image when you hear this sound.

        You should stop your response regardless of whether the image has just appeared or if the STOP SIGNAL plays afterwards. Nevertheless, DO NOT WAIT for the STOP SIGNAL. If you wait, the test will get harder on later trials.

        Press <SPACEBAR> to practice.
    KeyboardComponent keyInstruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeInstructions
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        textInstructions.alignText='left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine prepPrac
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    CodeComponent codePrepPrac
      Code Type = Auto->JS
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      Begin Routine:
        #print("block_loop.thisN")
        #print(block_loop.thisN)
        block_title = "Practice"
        textPractice.alignText='left'

        '''
        if(block_loop.thisN == 0):
            p_cue_target_match["AA"] = 1
            p_cue_target_match["NA"] = 1
            p_cue_target_match["PA"] = 1

            p_cue_target_match["AN"] = 1
            p_cue_target_match["NN"] = 1
            p_cue_target_match["PN"] = 1

            p_cue_target_match["AP"] = 1
            p_cue_target_match["NP"] = 1
            p_cue_target_match["PP"] = 1

            p_signal_to_noise["AA"] = 1
            p_signal_to_noise["AN"] = 1
            p_signal_to_noise["AP"] = 1

            p_signal_to_noise["NA"] = 1
            p_signal_to_noise["NN"] = 1
            p_signal_to_noise["NP"] = 1

            p_signal_to_noise["PA"] = 1
            p_signal_to_noise["PN"] = 1
            p_signal_to_noise["PP"] = 1

        elif(block_loop.thisN == 1):

            p_cue_target_match["AA"] = .7
            p_cue_target_match["NA"] = .7
            p_cue_target_match["PA"] = .7

            p_cue_target_match["AN"] = .7
            p_cue_target_match["NN"] = .7
            p_cue_target_match["PN"] = .7

            p_cue_target_match["AP"] = .7
            p_cue_target_match["NP"] = .7
            p_cue_target_match["PP"] = .7

            p_signal_to_noise["AA"] = .7
            p_signal_to_noise["AN"] = .7
            p_signal_to_noise["AP"] = .7

            p_signal_to_noise["NA"] = .7
            p_signal_to_noise["NN"] = .7
            p_signal_to_noise["NP"] = .7

            p_signal_to_noise["PA"] = .7
            p_signal_to_noise["PN"] = .7
            p_signal_to_noise["PP"] = .7
        '''
    TextComponent textPractice
      letterHeight = .025
      pos = (-0, -0)
      startVal [time (s)] = 0.0
      text [set every frame] = First, some practice. Press <SPACEBAR> to start.
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    KeyboardComponent keyPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prepTrial
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    CodeComponent codePrepTrial
      Code Type = Auto->JS
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      Begin Routine:
        import random
        from random import shuffle

        # Sort out the jitter
        jitter_times = [0.150, 0.200, 0.250, 0.300, 0.350]
        shuffle(jitter_times)
        jitter_time = jitter_times[0]
        thisExp.addData("jitter_time", jitter_time)

        # Select the next available stim for the given stim_type
        if next_stim[stim_type] >= len(all_stims[stim_type]):
            next_stim[stim_type] = 0  # Reset the counter if exceeded

        stimulus_image = all_stims[stim_type][next_stim[stim_type]]
        next_stim[stim_type] += 1  # Increment the next stim counter

        thisExp.addData("stimulus_image", stimulus_image)

        # Select the trial time
        trial_time = 1.25
        thisExp.addData("trial_time", trial_time)

        buzz_time = 0
        buzz_volume = 0

        # Setup the sound for non-go trials
        if go_nogo != "go":
            buzz_time = buzz_timers[stim_type]
            buzz_volume = 1
            thisExp.addData("buzz_time", buzz_time)
  Routine jitteredISI
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    TextComponent textJitteredFix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_time
      text = +
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  Routine preTrial
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    TextComponent textPreTrialFix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine iceTrial
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    ImageComponent imageTarg
      image [set every repeat] = $stimulus_image
      pos [set every repeat] = (0, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = $trial_time
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    KeyboardComponent keyResp
      allowedKeys = 'a','l'
      forceEndRoutine = False
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = $trial_time
      storeCorrect = True
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    SoundComponent stopSignal
      sound = A
      startVal [time (s)] = $buzz_time
      stopVal [duration (s)] = .5
      volume [set every repeat] = buzz_volume
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    CodeComponent codeTrial
      Code Type = Auto->JS
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      End Routine:
        # Default feedback text in case there's an error or no response component found
        feedback_message = 'No key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        if debug_mode:
            # (Your debug mode code remains the same)
            ...
        else:
            # Handling responses for both go and no-go trials
            if go_nogo != "go":
                # Handling for no-go trials
                if keyResp.keys is not None:  # If a response was made
                    feedback_message = "False alarm! Please do not respond on stop trials."
                    fb_col = "red"
                    keyResp.corr = 0
                    # Decrease buzz_time
                    buzz_time = max(buzz_min, buzz_time - 0.05)
                else:  # If no response was made
                    feedback_message = "Correct! No response needed on stop trials."
                    fb_col = "green"
                    keyResp.corr = 1
                    # Increase buzz_time
                    buzz_time = min(buzz_max, buzz_time + 0.05)

                # Common updates for no-go trials
                thisExp.addData("no_go_acc", keyResp.corr)
                stop_accuracies.append(keyResp.corr)
                buzz_timers[stim_type] = buzz_time
                thisExp.addData('new_buzz_time', buzz_time)

            elif go_nogo == "go":
                # Handling for go trials
                if keyResp.keys:  # If a response was made
                    keyResp.corr = int(keyResp.keys[0] in [corr_resp1, corr_resp2])
                    feedback_message = "Correct!" if keyResp.corr else "Oops! That was the wrong response."
                    fb_col = "green" if keyResp.corr else "red"
                else:  # If no response was made
                    keyResp.corr = 0  # Incorrect omission error
                    feedback_message = "Miss! Please try to respond more quickly."
                    fb_col = "red"

                # Common updates for go trials
                thisExp.addData('go_reaction_time', keyResp.rt[0] if keyResp.keys else None)
                thisExp.addData('go_accuracy', keyResp.corr)
                go_accuracies.append(keyResp.corr)

            print("buzz_time for " + str(stim_type) + " is " + str(buzz_time))
  Routine postTrial
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    CodeComponent fb_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        # fb_code Component - Begin Routine

        # We assume that 'feedbackText' is the name of the Text Component that will display the feedback message
        # And 'key_resp' is the name of the Keyboard Component that records the participant's response

        # Set the text alignment to left
        textPostTrial.alignText = 'left'

        # Default feedback text in case there's an error or no response component found
        fb_text = 'No key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        # If a key response has been made, set the feedback text and color accordingly
        try:
            if(go_nogo == "go"):
                if keyResp.corr:  # If the response was correct
                fb_text = 'Correct!'
                fb_col = 'green'
                else:  # If the response was incorrect
                fb_text = 'Incorrect'
                fb_col = 'red'
        except Exception as e:  # If there's an error, such as 'key_resp' not existing
            print(f'Make sure that you have:\n'
                  f'1. a routine with a keyboard component in it called "keyResp"\n'
                  f'2. In the keyResp component in the "data" tab select "Store Correct".\n'
                  f'In the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press)\n'
                  f'Error: {str(e)}')  # Output the actual error message to help with debugging

        # Apply the feedback message and color to the feedback text component
        textPostTrial.setText(fb_text)
        textPostTrial.setColor(fb_col)
    TextComponent textPostTrial
      color [set every repeat] = $fb_col
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message
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  Routine blockFeedback
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    CodeComponent codeBlockFB
      Code Type = Auto->JS
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      Begin Routine:
        ## codeBlockFB Component - Begin Routine

        # Initialize feedbackMsg
        feedbackMsg = ""

        # Calculate average accuracy and reaction time for "go" trials
        if go_accuracies:  # Ensure there are 'go' trials to calculate averages
            avg_go_accuracy = sum(go_accuracies) / len(go_accuracies)
            avg_go_reaction_time = sum(go_reaction_times) / len(go_reaction_times) if go_reaction_times else 0
        else:
            avg_go_accuracy = avg_go_reaction_time = 0  # Default values if no 'go' trials

        # Calculate for "stop-signal" trials
        if stop_accuracies:  # Ensure there are 'stop-signal' trials to calculate averages
            avg_stop_accuracy = sum(stop_accuracies) / len(stop_accuracies)
        else:
            avg_stop_accuracy = 0  # Default values if no 'stop-signal' trials

        # Initial part of the feedback message
        blockFeedbackText.alignText = 'left'
        feedbackMsg = f"Go Trials - Accuracy: {avg_go_accuracy:.2%}, "  # Converted to percentage
        feedbackMsg += f"Average Reaction Time: {avg_go_reaction_time:.3f} seconds\n"
        feedbackMsg += f"Stop-Signal Trials - Accuracy: {avg_stop_accuracy:.2%}\n"  # Converted to percentage

        # Initialize the countdown timer
        countdown_start = 10  # seconds
        globalClock = core.Clock()  # Assuming globalClock is defined at the experiment's start
      Each Frame:
        # codeBlockFB Component - Each Frame

        # Calculate the time left for the countdown
        time_elapsed = globalClock.getTime()
        countdown_time = countdown_start - time_elapsed

        # Update the feedback message with the countdown time
        feedbackMsg = f"Go Trials - Accuracy: {avg_go_accuracy:.2%}, "  # Converted to percentage
        feedbackMsg += f"Average Reaction Time: {avg_go_reaction_time:.3f} seconds\n"
        feedbackMsg += f"Stop-Signal Trials - Accuracy: {avg_stop_accuracy:.2%}\n"  # Converted to percentage
        feedbackMsg += f"Next block starts in: {int(countdown_time)} seconds"

        # Update the display of the countdown timer
        blockFeedbackText.setText(feedbackMsg)

        # End routine if countdown has finished
        if countdown_time <= 0:
            continueRoutine = False
    TextComponent blockFeedbackText
      color [set every repeat] = $fb_col
      letterHeight = .025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $feedbackMsg
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  Routine countdown
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(10-int(t))
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  Routine endTask
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    TextComponent textEnd
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Well done! You've finished this test. Thank you for participating in our study.

        Please press the <SPACEBAR> to end the experiment and inform a research team member.
    KeyboardComponent key_respEnd
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator imgLoader loopType="TrialHandler"
    conditionsFile = image_stims.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stim_file': 'Naturalistic_scenes/Ambiguous/1121.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1122.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1230.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1333.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1350.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1616.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1640.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1675.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1908.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1935.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1945.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/1947.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/2002.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/2018.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/2019.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/2020.jpg', 'stim_type': 'ambiguous_image'},
      {'stim_file': 'Naturalistic_scenes/Ambiguous/2025.jpg', 'stim_type': 'ambiguous_image'}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
    Routine loadStims
  LoopTerminator imgLoader
  Routine shuffleStims
  Routine prepTimings
  Routine instructions
  LoopInitiator pracBlock_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine prepPrac
    LoopInitiator pracTrials_loop loopType="TrialHandler"
      conditionsFile = block_pracTrials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Ambiguous', 'go_nogo': 'go', 'stim_type': 'ambiguous_image', 'corr_resp1': 'a', 'corr_resp2': 'l'},
        {'trial_type': 'Negative', 'go_nogo': 'go', 'stim_type': 'negative_image', 'corr_resp1': 'l', 'corr_resp2': None}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
      Routine prepTrial
      Routine jitteredISI
      Routine preTrial
      Routine iceTrial
      Routine postTrial
    LoopTerminator pracTrials_loop
    Routine blockFeedback
  LoopTerminator pracBlock_loop
  Routine endTask
